' Urbanova reference site datalogger program
'
' Patrick O'Keeffe (c) 2017
' Laboratory for Atmospheric Research at Washington State University
'
' https://github.com/wsular/urbanova-aqnet-ref-site

'HINT assumes nominal 3/8" O.D. PFA tubing
Const FLUSH_TUBE_ID = 0.251 'inches, I.D. of sampling line
Const NTP_SERVER = "north-america.pool.ntp.org"
Const UTC_OFFSET = -8 'hours
Const MAX_CLOCK_DRIFT = 2000 'ms
Const YEARS_DATA = 2 'years, how much SD card storage?


Const FAST_INTV = 1 'seconds
Const SLOW_INTV = 1  'minutes
Const STAT_INTV = 15 'minutes

Const CR = CHR(13) 'carriage return
Const LF = CHR(10) 'line feed

Const TWOB_405_COM = ComU3
Const TWOB_405_BAUD = 19200
Const TWOB_405_FMT = 3 '8/n/1
Const TWOB_405_REC = 128
Const TWOB_405_BUFF = 1+2*TWOB_405_REC

Const TWOB_205_COM = ComU5
Const TWOB_205_BAUD = 19200
Const TWOB_205_FMT = 3 '8/n/1
Const TWOB_205_REC = 80
Const TWOB_205_BUFF = 1+2*TWOB_205_REC

Const T100U_DF = U7
'HINT this mult/offset pair represents the analog output scaling setting
'of the instrument only; for calibration scaling, update the public vars
'`t100u_so2_mlt` and `t100u_so2_off` then set `save_changes` to True
Const T100U_OFF = 0
Const T100U_MLT = (100-T100U_OFF)/5000

Const LI840A_COM = ComC1
Const LI840A_BAUD = 9600
Const LI840A_FMT = 3 '8/n/1, RS232 logic
Const LI840A_REC = 120
Const LI840A_BUFF = LI840A_REC*2 + 1

Const GMX600_PORT = U1
Const GMX600_ADDR = 0
Const MIN_PER_FDEG = 60/1e6

Const TSI_COM = ComC3
Const TSI_BAUD = 38400
Const TSI_FORMAT = 3  '8/none/1 in "binary mode"
Const TSI_RECLEN = 23
Const TSI_BUFF = 2*TSI_RECLEN + 1
Const TSI_QUERY = "DCFTP0001"+CR 'request 1 CRLF delimited ascii record
Const TSI_RESPONSE = "OK"+CR+LF
Const TSI_STP_T = 21.1 'degC
Const TSI_STP_P = 101.3 'kPa
Const PI = 3.14159
Const L_PER_FT3 = 28.316847 'vol. conversion
Const R_AIR = 287.058   'specific gas constant for dry air, J/(kg K)
Const R_ = 8.3144621e-6 'universal gas constant, (kPa m^3)/(K mmol)
'part of Sutherland's fomula for deriving dynamic viscosity of air
Const SU_CONST = 120 'K
Const LAMBDA_AIR = 1.512041288 'uPa s K^-1/2
Const TUBE_AREA = PI*FLUSH_TUBE_ID*FLUSH_TUBE_ID/4 'in^2


'============================ VARIABLES =================================
Dim disable_m405 As Boolean
Dim m405_record As String * TWOB_405_REC
Dim twob_405nm(22)
Alias twob_405nm(1)  = m405_NO2
Alias twob_405nm(2)  = m405_NO
Alias twob_405nm(3)  = m405_NOx
Alias twob_405nm(4)  = m405_NO2_zero
Alias twob_405nm(5)  = m405_NO_zero
Alias twob_405nm(6)  = m405_flow_factor
Alias twob_405nm(7)  = m405_cell_T
Alias twob_405nm(8)  = m405_cell_P
Alias twob_405nm(9)  = m405_overflow_F
Alias twob_405nm(10) = m405_cell_F
Alias twob_405nm(11) = m405_O3_F
Alias twob_405nm(12) = m405_samp_LED_V
Alias twob_405nm(13) = m405_ref_LED_V
Alias twob_405nm(14) = m405_NO_gen_V
Alias twob_405nm(15) = m405_scrubber_T
'16: date, day of month    '19: time, hour
'17: date, month           '20: time, minutes
'18: date, short year      '21: time, seconds
Alias twob_405nm(22) = m405_status
Units m405_NO2 = ppb
Units m405_NO = ppb
Units m405_NOx = ppb
Units m405_NO2_zero = ppb
Units m405_NO_zero = ppb
Units m405_cell_T = degC
Units m405_cell_P = mbar
Units m405_overflow_F = cc/min
Units m405_cell_F = cc/min
Units m405_O3_F = cc/min
Units m405_samp_LED_V = volts
Units m405_ref_LED_V = volts
Units m405_NO_gen_V = volts
Units m405_scrubber_T = degC

Dim m205_record As String * TWOB_205_REC
Dim twob_205(9)
Alias twob_205(1) = m205_O3
Alias twob_205(2) = m205_cell_T
Alias twob_205(3) = m205_cell_P
'4: date, day of month    '7: time, hour
'5: date, month           '8: time, minute
'6: date, short year      '9: time, second
Units m205_O3 = ppbv
Units m205_cell_T = degC
Units m205_cell_P = mbar

Dim li840a_config As String * 300
Dim li840a_resp As String * 32
Dim li840a_record As String * LI840A_REC
Dim li840a(6)
Alias li840a(1) = li840a_cell_T
Alias li840a(2) = li840a_cell_P
Alias li840a(3) = li840a_CO2
Alias li840a(4) = li840a_pwr_src
Alias li840a(5) = li840a_H2O
Alias li840a(6) = li840a_dewpoint
Units li840a_cell_T = degC
Units li840a_cell_P = mb
Units li840a_CO2 = ppm
Units li840a_pwr_src = Vdc
Units li840a_H2O = ppth
Units li840a_dewpoint = degC

Dim gmx600(19)
Alias gmx600(1)  = gmx600_rel_WD    'aM!
Alias gmx600(2)  = gmx600_rel_WS
Alias gmx600(3)  = gmx600_corr_WD
Alias gmx600(4)  = gmx600_corr_WS
Alias gmx600(5)  = gmx600_status
Alias gmx600(6)  = gmx600_T  'aM1!
Alias gmx600(7)  = gmx600_RH
Alias gmx600(8)  = gmx600_dewpt
Alias gmx600(9)  = gmx600_P
'Alias gmx600(10) is dup of (5)
Alias gmx600(11) = gmx600_R_int 'aM3!
Alias gmx600(12) = gmx600_R_tot
'Alias gmx600(13) is dup of (5)
Alias gmx600(14) = gmx600_lat_deg 'aM5!
Alias gmx600(15) = gmx600_lat_min
Alias gmx600(16) = gmx600_long_deg
Alias gmx600(17) = gmx600_long_min
Alias gmx600(18) = gmx600_altitude
'Alias gmx600(19) is dup of (5)
Units gmx600_rel_WD = degrees
Units gmx600_rel_WS = m/s
Units gmx600_corr_WD = degreesTN
Units gmx600_corr_WS = m/s
Units gmx600_status = arb
Units gmx600_T = degC
Units gmx600_RH = pct
Units gmx600_dewpt = degC
Units gmx600_P = hPa
Units gmx600_R_int = mm/hr
Units gmx600_R_tot = mm
Units gmx600_lat_deg = degreesN
Units gmx600_lat_min = minutesN
Units gmx600_long_deg = degreesE
Units gmx600_long_min = minutesE
Units gmx600_altitude = m

Dim work_out(6)
Alias work_out(1) = gmx600_rel_WS_Avg      'mean horizontal wind speed
Alias work_out(2) = gmx600_rel_WD_unit_Avg 'unit vector mean wind direction
Alias work_out(3) = gmx600_rel_WD_epa_Std  'Yamartino-algorithm WD std. dev.
Alias work_out(4) = gmx600_corr_WS_Avg
Alias work_out(5) = gmx600_corr_WD_unit_Avg
Alias work_out(6) = gmx600_corr_WD_epa_Std

Dim tsi_bytes
Dim tsi_record As String * TSI_RECLEN
Dim disable_4043 As Boolean
Dim tsi(3)
Alias tsi(1) = flush_massFlow
Alias tsi(2) = flush_tmpr
Alias tsi(3) = flush_press
Units flush_massFlow = sLpm
Units flush_tmpr = degC
Units flush_press = kPa
Dim tube_volume
Dim tsi_etc(3)
Alias tsi_etc(1) = flush_volFlow
Alias tsi_etc(2) = flush_delay
Alias tsi_etc(3) = flush_Re
Units flush_volFlow = L/min
Units flush_delay = sec
Units flush_Re = dimless

Dim t100u_SO2
Units t100u_SO2 = ppb

Dim ntp_offset
Units ntp_offset = ms

Dim inbetween_1min_scan As Boolean
Dim just_had_1min_scan As Boolean

'================================= TABLES
Public debug_on As Boolean
DataTable(debug_,debug_on,1)
  Sample(1,disable_m405,Boolean)
  Sample(1,m405_record,String)
  Sample(22,twob_405nm(1),IEEE4)
  Sample(1,m205_record,String)
  Sample(9,twob_205(1),IEEE4)
  Sample(1,li840a_record,String)
  Sample(6,li840a(1),IEEE4)
  Sample(19,gmx600(1),IEEE4)
  Sample(1,tsi_bytes,IEEE4)
  Sample(1,tsi_record,String)
  Sample(1,disable_4043,Boolean)
  Sample(3,tsi(1),IEEE4)
  Sample(3,tsi_etc(1),IEEE4)
  Sample(1,t100u_SO2,IEEE4)
  Sample(1,ntp_offset,IEEE4)
EndTable

DataTable(work,True,1)
  TableHide
  DataInterval(0,STAT_INTV,Min,1)
  WindVector(1,gmx600_rel_WS,gmx600_rel_WD,IEEE4, _
                          (gmx600_rel_WS=NAN OR gmx600_rel_WD=NAN),0,0,0)
  WindVector(1,gmx600_corr_WS,gmx600_corr_WD,IEEE4, _
                        (gmx600_corr_WS=NAN OR gmx600_corr_WD=NAN),0,0,0)
EndTable

DataTable(tsdata,True,-1)
  DataInterval(0,SLOW_INTV,Min,5)
  CardOut(0,(YEARS_DATA*365*24*60/SLOW_INTV))
  Sample(1,t100u_SO2,IEEE4)
  Sample(7,twob_405nm(1),FP2) '2B Tech NOx
  Sample(1,twob_405nm(8),IEEE4)
  Sample(3,twob_405nm(9),FP2)
  Sample(2,twob_405nm(12),IEEE4)
  Sample(2,twob_405nm(14),FP2)
  Sample(1,twob_405nm(22),UINT2)
  Sample(2,twob_205(1),FP2) '2B Tech O3
  Sample(1,twob_205(3),IEEE4)
  Average(1,li840a_CO2,FP2,li840a_CO2=NAN) 'Licor LI840A
    FieldNames("li840a_CO2")
  Average(1,li840a_H2O,FP2,li840a_H2O=NAN)
    FieldNames("li840a_H2O")
  Average(1,li840a_cell_T,FP2,li840a_cell_T=NAN)
    FieldNames("li840a_cell_T")
  Average(1,li840a_cell_P,IEEE4,li840a_cell_P=NAN)
    FieldNames("li840a_cell_P")
  Average(1,li840a_dewpoint,FP2,li840a_dewpoint=NAN)
    FieldNames("li840a_dewpoint")
  Average(1,li840a_pwr_src,FP2,li840a_pwr_src=NAN)
    FieldNames("li840a_pwr_src")
  Sample(8,gmx600(1),FP2) 'WD/WS up thru dewpoint
  Sample(1,gmx600_P,IEEE4)
  Sample(1,gmx600_R_int,FP2)
  Sample(1,gmx600_R_tot,FP2)
    FieldNames("gmx600_R_daily_tot")
  Sample(1,gmx600_lat_deg,FP2)
  Sample(1,gmx600_lat_min,IEEE4)
  Sample(1,gmx600_long_deg,FP2)
  Sample(1,gmx600_long_min,IEEE4)
  Sample(1,gmx600_altitude,IEEE4)
  Average(1,flush_massFlow,FP2,flush_massFlow=NAN)
  Average(1,flush_tmpr,FP2,flush_tmpr=NAN)
  Average(1,flush_press,FP2,flush_press=NAN)
EndTable

DataTable(stats,True,-1)
  DataInterval(0,STAT_INTV,Min,5)
  CardOut(0,(YEARS_DATA*365*24*60/STAT_INTV))
  Average(1,t100u_SO2,IEEE4,inbetween_1min_scan OR t100u_SO2=NAN) 'Teledyne SO2
  StdDev (1,t100u_SO2,IEEE4,inbetween_1min_scan OR t100u_SO2=NAN)
  Average(1,m405_NO2,FP2,inbetween_1min_scan OR disable_m405) '2B Tech Nox
  StdDev (1,m405_NO2,FP2,inbetween_1min_scan OR disable_m405)
  Average(1,m405_NO,FP2,inbetween_1min_scan OR disable_m405)
  StdDev (1,m405_NO,FP2,inbetween_1min_scan OR disable_m405)
  Average(1,m405_NOx,FP2,inbetween_1min_scan OR disable_m405)
  StdDev (1,m405_NOx,FP2,inbetween_1min_scan OR disable_m405)
  Average(1,m405_NO2_zero,FP2,inbetween_1min_scan OR disable_m405)
  StdDev (1,m405_NO2_zero,FP2,inbetween_1min_scan OR disable_m405)
  Average(1,m405_NO_zero,FP2,inbetween_1min_scan OR disable_m405)
  StdDev (1,m405_NO_zero,FP2,inbetween_1min_scan OR disable_m405)
  Average(2,twob_405nm(6),FP2,inbetween_1min_scan OR disable_m405)
  Average(1,twob_405nm(8),IEEE4,inbetween_1min_scan OR disable_m405)
  Average(3,twob_405nm(9),FP2,inbetween_1min_scan OR disable_m405)
  Average(2,twob_405nm(12),IEEE4,inbetween_1min_scan OR disable_m405)
  Average(2,twob_405nm(14),FP2,inbetween_1min_scan OR disable_m405)
  Average(1,li840a_CO2,FP2,li840a_CO2=NAN) 'Licor CO2
  Average(1,li840a_H2O,FP2,li840a_H2O=NAN)
  Average(1,li840a_cell_T,FP2,li840a_cell_T=NAN)
  Average(1,li840a_cell_P,IEEE4,li840a_cell_P=NAN)
  Average(1,li840a_dewpoint,FP2,li840a_dewpoint=NAN)
  Average(1,li840a_pwr_src,FP2,li840a_pwr_src=NAN)
  Average(1,m205_O3,FP2,inbetween_1min_scan OR m205_O3=NAN) '2B Tech O3
  Average(1,m205_cell_T,FP2,inbetween_1min_scan OR m205_cell_T=NAN)
  Average(1,m205_cell_P,IEEE4,inbetween_1min_scan OR m205_cell_P=NAN)
  Sample (6,work_out(1),FP2) 'Gill GMX600
  Average(1,gmx600_T,FP2,inbetween_1min_scan OR gmx600_T=NAN)
  Average(1,gmx600_RH,FP2,inbetween_1min_scan OR gmx600_RH=NAN)
  Average(1,gmx600_dewpt,FP2,inbetween_1min_scan OR gmx600_dewpt=NAN)
  Average(1,gmx600_P,IEEE4,inbetween_1min_scan OR gmx600_P=NAN) 'HINT: FP2 lacks resolution
  Average(1,gmx600_R_int,FP2,inbetween_1min_scan OR gmx600_R_int=NAN)
  Sample (1,gmx600_R_tot,FP2)
    FieldNames("gmx600_R_daily_Tot")
  Average(1,gmx600_lat_deg,FP2,inbetween_1min_scan OR gmx600_lat_deg=NAN)
  Average(1,gmx600_lat_min,IEEE4,inbetween_1min_scan OR gmx600_lat_min=NAN)
  Average(1,gmx600_long_deg,FP2,inbetween_1min_scan OR gmx600_long_deg=NAN)
  Average(1,gmx600_long_min,IEEE4,inbetween_1min_scan OR gmx600_long_min=NAN)
  Average(1,gmx600_altitude,FP2,inbetween_1min_scan OR gmx600_altitude=NAN)
  Median (1,gmx600_status,(60*STAT_INTV/SLOW_INTV),FP2,inbetween_1min_scan OR gmx600_status=NAN)
  Average(1,flush_massFlow,FP2,flush_massFlow=NAN)
  StdDev (1,flush_massFlow,FP2,flush_massFlow=NAN)
  Average(1,flush_tmpr,FP2,flush_tmpr=NAN)
  Average(1,flush_press,FP2,flush_press=NAN)
  Average(1,flush_volFlow,FP2,flush_volFlow=NAN)
  StdDev (1,flush_volFlow,FP2,flush_volFlow=NAN)
  Average(1,flush_delay,FP2,flush_delay=NAN)
  StdDev (1,flush_delay,FP2,flush_delay=NAN)
  Average(1,flush_Re,IEEE4,flush_Re=NAN)
EndTable

'=================== SETTINGS STORAGE
'HINT the public table is repurposed to expose only settings; if you want
'to monitor data, use the `debug` table via LoggerNet clients or the
'custom user menu via keyboard display
Dim filehandle As Long
Const SETTINGS_FILE = "CPU:settings.dat"
Const NUM_SETTINGS = {15}
Const WRITEFILE = 0
Const READFILE = 1

Dim setsave(NUM_SETTINGS) 'HINT stored to CPU:, tracked in `settings_hist` table
Alias setsave(1)  = li840a_co2_mlt 'CO2
Alias setsave(2)  = li840a_co2_off
Alias setsave(3)  = li840a_h2o_mlt 'H2O 
Alias setsave(4)  = li840a_h2o_off
Alias setsave(5)  = m205_o3_mlt 'O3
Alias setsave(6)  = m205_o3_off
Alias setsave(7)  = m405_no_mlt 'NO
Alias setsave(8)  = m405_no_off
Alias setsave(9)  = m405_no2_mlt 'NO2
Alias setsave(10) = m405_no2_off
Alias setsave(11) = m405_nox_mlt 'NOx
Alias setsave(12) = m405_nox_off
Alias setsave(13) = t100u_so2_mlt   'SO2
Alias setsave(14) = t100u_so2_off
Alias setsave(15) = flush_tube_len
Units li840a_co2_mlt = ppmv/ppmv
Units li840a_co2_off = ppmv
Units li840a_h2o_mlt = ppthv/ppthv
Units li840a_h2o_off = ppthv
Units m205_o3_mlt = ppbv/ppbv
Units m205_o3_off = ppbv
Units m405_no_mlt = ppbv/ppbv
Units m405_no_off = ppbv
Units m405_no2_mlt = ppbv/ppbv
Units m405_no2_off = ppbv
Units m405_nox_mlt = ppbv/ppbv
Units m405_nox_off = ppbv
Units t100u_so2_mlt = ppbv/ppbv
Units t100u_so2_off = ppbv
Units flush_tube_len = ft 'HINT yes, units matter - must be feet

Public setchoose(NUM_SETTINGS) 'HINT this array edited by user via Public table
Alias setchoose(1)  = set_li840a_co2_mlt 'CO2
Alias setchoose(2)  = set_li840a_co2_off
Alias setchoose(3)  = set_li840a_h2o_mlt 'H2O 
Alias setchoose(4)  = set_li840a_h2o_off
Alias setchoose(5)  = set_m205_o3_mlt 'O3
Alias setchoose(6)  = set_m205_o3_off
Alias setchoose(7)  = set_m405_no_mlt 'NO
Alias setchoose(8)  = set_m405_no_off
Alias setchoose(9)  = set_m405_no2_mlt 'NO2
Alias setchoose(10) = set_m405_no2_off
Alias setchoose(11) = set_m405_nox_mlt 'NOx
Alias setchoose(12) = set_m405_nox_off
Alias setchoose(13) = set_t100u_so2_mlt   'SO2
Alias setchoose(14) = set_t100u_so2_off 
Alias setchoose(15) = set_flush_tube_len
Units set_li840a_co2_mlt = ppmv/ppmv
Units set_li840a_co2_off = ppmv
Units set_li840a_h2o_mlt = ppthv/ppthv
Units set_li840a_h2o_off = ppthv
Units set_m205_o3_mlt = ppbv/ppbv
Units set_m205_o3_off = ppbv
Units set_m405_no_mlt = ppbv/ppbv
Units set_m405_no_off = ppbv
Units set_m405_no2_mlt = ppbv/ppbv
Units set_m405_no2_off = ppbv
Units set_m405_nox_mlt = ppbv/ppbv
Units set_m405_nox_off = ppbv
Units set_t100u_so2_mlt = ppbv/ppbv
Units set_t100u_so2_off = ppbv
Units set_flush_tube_len = ft

'HINT adjust table history length to taste (default: 500)
'WARN modifying table history length will reset (erase) stored records!
DataTable(settings_hist,True,500)
  CardOut(1,1000)
  Sample(NUM_SETTINGS,setsave(1),IEEE4)
EndTable

Sub set_default_choices()
  'TODO abstract into Constants for resetting with on failed input validation
  set_li840a_co2_mlt = 1.0
  set_li840a_co2_off = 0
  set_li840a_h2o_mlt = 1.0
  set_li840a_h2o_off = 0
  set_m205_o3_mlt = 1.0
  set_m205_o3_off = 0
  set_m405_no_mlt = 1.0
  set_m405_no_off = 0
  set_m405_no2_mlt = 1.0
  set_m405_no2_off = 0
  set_m405_nox_mlt = 1.0
  set_m405_nox_off = 0
  set_t100u_so2_mlt = 1.0
  set_t100u_so2_off = 0
  set_flush_tube_len = 45 'HINT update as approp!
EndSub

Sub populate_choices() 'replace current user choices with saved settings
  Move(setchoose(1),NUM_SETTINGS,setsave(1),NUM_SETTINGS)
EndSub

Sub save_current_choices() 'replace saved settings with current choices
  
  'TODO validate inputs while still inside setchoose()
  
  Move(setsave(1),NUM_SETTINGS,setchoose(1),NUM_SETTINGS)
  Calfile(setsave,NUM_SETTINGS,SETTINGS_FILE,WRITEFILE)
  CallTable settings_hist
EndSub

Sub load_settings() 'load file from memory, using defaults if necessary
  filehandle = FileOpen(SETTINGS_FILE,"rb",0)
  FileClose(filehandle)
  If (filehandle = 0) Then 'file was not found
    set_default_choices()
  Else
    Calfile(setsave,NUM_SETTINGS,SETTINGS_FILE,READFILE)
    populate_choices()
  EndIf
  save_current_choices()
EndSub

Sub reset_settings() 'revert everything to defaults
  FileManage(SETTINGS_FILE,8) 'delete file
  load_settings()
EndSub


'======================= MENU
Const Off = False
Const Recording = True
Const Cancel = False
Const Yes = True
Public save_changes As Boolean
Public discard_changes As Boolean
Public set_defaults As Boolean

DisplayMenu("WSU AQ Ref Site",-2)
  SubMenu("Monitor data")
    SubMenu("NOx (2B Tech)")
      DisplayValue("2B NO,  ppb", m405_NO)
      DisplayValue("2B NO2, ppb", m405_NO2)
      DisplayValue("2B NOx, ppb", m405_NOx)
    EndSubMenu
    SubMenu("O3 (2B Tech)")
      DisplayValue("O3", m205_O3)
      DisplayValue("Cell tmpr.", m205_cell_T)
      DisplayValue("Cell press.", m205_cell_P)
    EndSubMenu
    SubMenu("CO2/H2O (Licor)")
      DisplayValue("CO2", li840a_CO2)
      DisplayValue("H2O", li840a_H2O)
      DisplayValue("Cell tmpr.", li840a_cell_T)
      DisplayValue("Cell press.", li840a_cell_P)
      DisplayValue("Dewpoint", li840a_dewpoint)
      DisplayValue("Power in", li840a_pwr_src)
    EndSubMenu
    SubMenu("SO2 (TAPI)")
      DisplayValue("SO2, ppb", t100u_SO2)
    EndSubMenu
    SubMenu("WX (MaxiMet")
      DisplayValue("Status", gmx600_status)
      DisplayValue("rel WS, m/s", gmx600_rel_WS)
      DisplayValue("rel WD, deg", gmx600_rel_WD)
      DisplayValue("corr WS, m/s", gmx600_corr_WS)
      DisplayValue("corr WD, deg", gmx600_corr_WD)
      DisplayValue("Tmpr, degC", gmx600_T)
      DisplayValue("RH, pct", gmx600_RH)
      DisplayValue("dewpt, degC", gmx600_dewpt)
      DisplayValue("Press, hPa", gmx600_P)
      DisplayValue("rain, mm/hr", gmx600_R_int)
      DisplayValue("rain, mm/d", gmx600_R_tot)
      DisplayValue("Lat, deg", gmx600_lat_deg)
      DisplayValue("Lat, min", gmx600_lat_min)
      DisplayValue("Long, deg", gmx600_long_deg)
      DisplayValue("Long, min", gmx600_long_min)
      DisplayValue("Altitude, m", gmx600_altitude)
    EndSubMenu
    SubMenu("Flow (TSI)")
      DisplayValue("Flow, sLpm", flush_massFlow)
      DisplayValue("Tmpr, degC", flush_tmpr)
      DisplayValue("Press, kPa", flush_press)
    EndSubMenu
  EndSubMenu
  SubMenu("Settings")
    SubMenu("CO2/H2O (Licor)")
      MenuItem("CO2 mult.", set_li840a_co2_mlt)
      MenuItem("CO2 offset", set_li840a_co2_off)
      MenuItem("H2O mult.", set_li840a_h2o_mlt)
      MenuItem("H2O offset", set_li840a_h2o_off)
    EndSubMenu
    SubMenu("NOx (2B Tech)")
      MenuItem("NO mult.", set_m405_no_mlt)
      MenuItem("NO offset", set_m405_no_off)
      MenuItem("NO2 mult.", set_m405_no2_mlt)
      MenuItem("NO2 offset", set_m405_no2_off)
      MenuItem("NOx mult.", set_m405_nox_mlt)
      MenuItem("NOx offset", set_m405_nox_off)
    EndSubMenu
    SubMenu("O3 (2B Tech)")
      MenuItem("O3 mult.", set_m205_o3_mlt)
      MenuItem("O3 offset", set_m205_o3_off)
    EndSubMenu
    SubMenu("SO2 (TAPI)")
      MenuItem("SO2 mult.", set_t100u_so2_mlt)
      MenuItem("SO2 offset", set_t100u_so2_off)
    EndSubMenu
    MenuItem("Save now?", save_changes)
      MenuPick(Cancel,Yes)
    MenuItem("Discard?", discard_changes)
      MenuPick(Cancel,Yes)
    MenuItem("To defaults?", set_defaults)
        MenuPick(Cancel,Yes)
  EndSubMenu
EndMenu

'================================= FUNCTIONS =================================
'TSI Models 4040/4043/4045 General Purpose Thermal Mass Flowmeter Operation
'    and Service Manual. Appendix B. August 2001. Revision D
'[StdFlow] = std L/min @ TSI specs, [Tmpr] = C, [Press] = kPa
Function volumetric_flow(StdFlow, Tmpr, Press) As Float 'Lpm
  Return (StdFlow * ((273.15+Tmpr)/(273.15+TSI_STP_T)) * (TSI_STP_P/Press))
EndFunction

'[VolFlow] = L/min
Function estimate_lag(VolFlow) As Float 'sec
  Return (60 * tube_volume / VolFlow))  '(60sec/min)(L)(min/L)
EndFunction

'https://en.wikipedia.org/wiki/Viscosity
'[Tmpr] = C
Function dynamic_viscosity(Tmpr) As Float 'kg/(m*s) = Pa*s
  '(uPa*s/K^1/2)(K^3/2)(1/K) * (Pa/10^6 uPa)
  Return (LAMBDA_AIR * (Tmpr+273.15)^1.5 / ((Tmpr+273.15+SU_CONST)*10^6))
EndFunction

'[Tmpr] = C, [Press] = kPa (abs.)
Function density_of_air(Tmpr, Press) As Float 'kg/m^3
  '(Pa/kPa)(kPa)(kg*K / J)(1/K)(J / Pa*m^3)
  Return (1000*Press / (R_AIR*(Tmpr+273.15)))
EndFunction

'https://en.wikipedia.org/wiki/Reynolds_number
'[VolFlow] = L/min, [Tmpr] = C, [Press] = kPa (abs.)
'HINT return as a Float but use FIX() to drop fractional portion
Function reynolds_num(VolFlow, Tmpr, Press) As Float 'dimless
  Dim mu, rho
  mu = dynamic_viscosity(Tmpr)
  rho = density_of_air(Tmpr, Press)
  '(kg/m^3)(L/min)(in)(m*s/kg)(1/in^2) * (min/60 sec)(39.37in/m)(m^3/1000L)
  Return Round((rho*VolFlow*FLUSH_TUBE_ID*39.37)/(mu*TUBE_AREA*60*1000), -1)
EndFunction


'============================== SUBROUTINES =================================
Sub setup_li840a()
  li840a_config = ("<li840><cfg><outrate>1</outrate></cfg><rs232><co2>true</co2>" & _
        "<co2abs>false</co2abs><h2o>true</h2o><h2odewpoint>true</h2odewpoint>" & _
        "<h2oabs>false</h2oabs><celltemp>true</celltemp><cellpres>true</cellpres>" & _
        "<ivolt>true</ivolt><raw>false</raw><strip>true</strip></rs232></li840>")
  li840a_resp = ("<li840><ack>true</ack></li840>")
  SerialOpen(LI840A_COM,LI840A_BAUD,LI840A_FMT,0,LI840A_BUFF)
  SerialOut(LI840A_COM,li840a_config,li840a_resp,3,1)
  Move(li840a(1),6,NAN,1) 
EndSub

Sub setup_m405()
  SerialOpen(TWOB_405_COM,TWOB_405_BAUD,TWOB_405_FMT,0,TWOB_405_BUFF)
  Move(twob_405nm(1),22,NAN,1)
EndSub

Sub setup_m205()
  SerialOpen(TWOB_205_COM,TWOB_205_BAUD,TWOB_205_FMT,0,TWOB_205_BUFF)
  Move(twob_205(1),3,NAN,1)
EndSub

Sub setup_tsi4043()
  SerialOpen(TSI_COM,TSI_BAUD,TSI_FORMAT,0,TSI_BUFF)
  tube_volume = (flush_tube_len * TUBE_AREA/144) * L_PER_FT3
  Move(tsi(1),3,NAN,1)
EndSub


'========================= MAIN PROGRAM =====================================
SequentialMode 'req'd for proper TSI4043 serial comms
BeginProg
  load_settings()
  setup_li840a()
  setup_m405()
  setup_m205()
  setup_tsi4043()

	Scan (FAST_INTV,sec,0,0)
    SerialIn(li840a_record,LI840A_COM,50,&h0A,LI840A_BUFF)
    If (Len(li840a_record)) Then
      SplitStr(li840a(1),li840a_record,"",6,0)
      li840a_cell_P *= 10 'kPa -> mbar
      li840a_CO2 = li840a_CO2 * li840a_co2_mlt + li840a_co2_off
      li840a_H2O = li840a_H2O * li840a_h2o_mlt + li840a_h2o_off
    Else
      Move(li840a(1),6,NAN,1)
    EndIf

    SerialOut(TSI_COM,TSI_QUERY,TSI_RESPONSE,1,2) 'wait 20ms for ack response   
    Delay(0,20,msec) 'wait another 20ms for data message    
    tsi_bytes = SerialInBlock(TSI_COM,tsi_record,TSI_RECLEN)
    
    If (StrComp(Left(tsi_record,3),"ERR")) 'no match
      SplitStr(tsi(1),tsi_record,"",3,0)
      flush_volFlow = volumetric_flow(flush_massFlow, flush_tmpr, flush_press)
      flush_delay = IIF(tube_volume > 0, estimate_lag(flush_volFlow), NAN)
      flush_Re = IIF(flush_volFlow > 0, _
                      reynolds_num(flush_volFlow, flush_tmpr, flush_press), 0)
      disable_4043 = False
    Else
      Move(tsi(1),3,NAN,1)
      Move(tsi_etc(1),3,NAN,1)
      disable_4043 = True
    EndIf

    CallTable(tsdata)
    CallTable(stats)
    CallTable(debug_)

    If (save_changes) Then
      save_current_choices()
      save_changes = Cancel
    ElseIf (discard_changes) Then
      populate_choices()
      discard_changes = Cancel
    ElseIf (set_defaults) Then
      reset_settings()
      set_defaults = Cancel
    EndIf
    
    inbetween_1min_scan = True
    If (just_had_1min_scan) Then
      just_had_1min_scan = False
      inbetween_1min_scan = False
    EndIf
	NextScan

SlowSequence
  Scan(SLOW_INTV,Min,1,0)
    VoltDiff(t100u_SO2,1,mv5000,T100U_DF,True,0,60,T100U_MLT,T100U_OFF)
    t100u_SO2 = t100u_SO2 * t100u_so2_mlt + t100u_so2_off

    SerialIn(m405_record,TWOB_405_COM,100,&h0D,TWOB_405_REC)
    If (Len(m405_record)) Then
      SplitStr(twob_405nm(1),m405_record,"",22,0)
      If (twob_405nm(21) = NAN) Then 
        Move(twob_405nm(1),21,NAN,1)
        disable_m405 = True
      EndIf
      SerialFlush(TWOB_405_COM)
      m405_NO = m405_NO * m405_no_mlt + m405_no_off
      m405_NO2 = m405_NO2 * m405_no2_mlt + m405_no2_off
      m405_NOx = m405_NOx * m405_nox_mlt + m405_nox_off
    EndIf

    SerialIn(m205_record,TWOB_205_COM,100,&h0D,TWOB_205_REC)
    If (Len(m205_record)) Then
      SplitStr(twob_205(1),m205_record,"",9,0)
      If (twob_205(9)=NAN OR m205_cell_P < 800 OR m205_cell_P > 1300) Then
        Move(twob_205(1),9,NAN,1)
      EndIf
      SerialFlush(TWOB_205_COM)
      m205_O3 = m205_O3 * m205_o3_mlt + m205_o3_off
    EndIf
    
    SDI12Recorder(gmx600(1),GMX600_PORT,GMX600_ADDR,"M!",1,0)
    SDI12Recorder(gmx600(6),GMX600_PORT,GMX600_ADDR,"M1!",1,0)
    SDI12Recorder(gmx600(11),GMX600_PORT,GMX600_ADDR,"M3!",1,0)
    SDI12Recorder(gmx600(14),GMX600_PORT,GMX600_ADDR,"M5!",1,0)
    If (gmx600_status = 4) Then 'GPS fixed
      gmx600_lat_min *= MIN_PER_FDEG 'convert fractional deg -> decimal minute
      gmx600_long_min *= MIN_PER_FDEG
    Else
      Move(gmx600_lat_min,5,NAN,1) 'replace 999.99 with nulls
    EndIf
    CallTable(work)
    If (work.Output(1,1)) Then GetRecord(work_out(1),work,1)

    just_had_1min_scan = True
  NextScan

SlowSequence
  Scan(5,Min,1,0)
    ntp_offset = NetworkTimeProtocol(NTP_SERVER,UTC_OFFSET,MAX_CLOCK_DRIFT)
  NextScan
EndProg

